PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = height
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  expName = sample05
  Screen = 1
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Routines
  Routine trial
    ptc_rec_component ptc_rec
      start_msg = Start recording
      stop_msg = Stop recording
    ptc_getpos_component ptc_getpos
      filler = -10000
      binocular = Average
    PolygonComponent polygon
      fillColor = $[1,1,1]
      pos [set every frame] = ptc_getpos
      startVal [time (s)] = 0.0
      nVertices = 64
      size = (0.1, 0.1)
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    ptc_message_component ptc_message
      text = look at right
      timeType = condition
      time = ptc_getpos[0]>0.3
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine init
    ptc_init_component ptc_init
      datafile = data.tsv
      embed = False
      id = 0
    ptc_cal_component ptc_cal
      move_duration = 1.0
      shuffle = False
      calibration_points = [[-0.2, -0.2], [0.2, -0.2], [0, 0], [-0.2, 0.2], [0.2, 0.2]]
      text_color = white
      start_key = space
      enable_mouse = True
      decision_key = return
      show_status = True
Flow
  Routine init
  Routine trial
